PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 2023.1.3
  Window size (pixels) = [1536, 864]
  expName = Delay Discounting Task
  keyboardBackend = ioHub
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Routines
  Routine trial
    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      text [set every repeat] = $"GBP " + str(reward_today) + " today" + " or" + " GBP " + str(future_reward) + " after " + str(delay) + " days"
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    KeyboardComponent key_resp
      allowedKeys = 't','l'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = C:/Users/ASUS/OneDrive/Desktop/delay discounting task.xlsx
    loopType = random
    nReps = 4
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    conditions:
      [{'reward_today': 11, 'future_reward': 30, 'delay': 7},
      {'reward_today': 15, 'future_reward': 35, 'delay': 13},
      {'reward_today': 27, 'future_reward': 50, 'delay': 21},
      {'reward_today': 40, 'future_reward': 55, 'delay': 62},
      {'reward_today': 49, 'future_reward': 60, 'delay': 89},
      {'reward_today': 67, 'future_reward': 75, 'delay': 119},
      {'reward_today': 78, 'future_reward': 80, 'delay': 162},
      {'reward_today': 20, 'future_reward': 40, 'delay': 15},
      {'reward_today': 3, 'future_reward': 19, 'delay': 30},
      {'reward_today': 67, 'future_reward': 45, 'delay': 6},
      {'reward_today': 89, 'future_reward': 93, 'delay': 17},
      {'reward_today': 80, 'future_reward': 100, 'delay': 26},
      {'reward_today': 14, 'future_reward': 28, 'delay': 48},
      {'reward_today': 56, 'future_reward': 75, 'delay': 90},
      {'reward_today': 39, 'future_reward': 48, 'delay': 71},
      {'reward_today': 95, 'future_reward': 115, 'delay': 14},
      {'reward_today': 28, 'future_reward': 50, 'delay': 16},
      {'reward_today': 49, 'future_reward': 79, 'delay': 12},
      {'reward_today': 85, 'future_reward': 89, 'delay': 10},
      {'reward_today': 35, 'future_reward': 95, 'delay': 25},
      {'reward_today': 19, 'future_reward': 30, 'delay': 36},
      {'reward_today': 37, 'future_reward': 62, 'delay': 16},
      {'reward_today': 96, 'future_reward': 120, 'delay': 9},
      {'reward_today': 62, 'future_reward': 99, 'delay': 20},
      {'reward_today': 10, 'future_reward': 40, 'delay': 18}]
    Routine trial
  LoopTerminator trials
